PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant': '', 'session': '01'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = spider_slider_1.0
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Routines
  Routine thanks
    TextComponent text_post
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Danke! Kontaktieren Sie nun die Versuchsleiter*innen.
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    KeyboardComponent key_resp_2
      allowedKeys = 'enter','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine approach
    SliderComponent spider_slider
      color = White
      fillColor = Blue
      forceEndRoutine = True
      granularity = 1
      labels = 'min', 'max'
      letterHeight = 0.03
      pos = (0, -0.32)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = 1, 101
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    ImageComponent insight_on
      image [set every repeat] = $current_insight
      pos = (0, 120)
      size = 1000, 750
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent insight
      image [set every repeat] = $current_blurred
      opacity = 0
      pos = (0, 120)
      size = 1000, 750
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import math
      Begin Experiment:
        opac = 1
      Begin Routine:
        spider_slider.markerPos = 1
      Each Frame:
        # change opacity according to slider position
        opac = 101.01 - spider_slider.markerPos # rating from 0 to 100
        insight.opacity = math.log(opac, 10)/2
  Routine instr
    TextComponent text_pre
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Im Folgenden sehen Sie weichgezeichnete, unkenntlich gemachte Bilder von Spinnen. Verwenden Sie den Slider, um das jeweilige Bild bis zu jenem Punkt nachzuschärfen, an dem Sie sich beim Betrachten noch wohl fühlen.

        Wichtig: Halten Sie die linke Maustaste gedrückt, während Sie den Slider bewegen. Sobald Sie die linke Maustaste loslassen, wird Ihre Antwort gespeichert.

        Wir starten mit einer Übungsrunde mit einem neutralen Bild.
        Danach folgen die Spinnenbilder.

        Wenn Sie beginnen möchten, drücken Sie die Space-Taste.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
    SliderComponent practice_slider
      color = White
      fillColor = Blue
      forceEndRoutine = True
      granularity = 1
      labels = 'min', 'max'
      letterHeight = 0.03
      pos = (0, -0.32)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = 1, 101
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    ImageComponent neutral_on
      image = chair.jpg
      pos = (0, 120)
      size = 1000, 750
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent neutral
      image = chair_blurred.jpg
      pos = (0, 120)
      size = 1000, 750
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_neutral
      Code Type = Auto->JS
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      Before Experiment:
        import math
      Begin Experiment:
        opac = 1
      Begin Routine:
        practice_slider.markerPos = 1
      Each Frame:
        # change opacity according to slider position
        opac = 101.01 - practice_slider.markerPos # rating from 0 to 100
        neutral.opacity = math.log(opac, 10)/2
  Routine instr2
    TextComponent text_mid
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Nun folgen die Spinnenbilder.

        Wenn Sie bereit sind, drücken Sie die Space-Taste.
    KeyboardComponent key_resp_mid
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  Routine practice
  Routine instr2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'current_blurred': 'Sp_029_blurred.jpg', 'current_insight': 'Sp_029.jpg'},
      {'current_blurred': 'Sp_090_blurred.jpg', 'current_insight': 'Sp_090.jpg'},
      {'current_blurred': 'Sp_159_blurred.jpg', 'current_insight': 'Sp_159.jpg'}]
    Routine approach
  LoopTerminator trials
  Routine thanks
